' $Log: not supported by cvs2svn $
' Revision 1.7  2006/02/08 22:34:17  dan
' Allow modification of xy axes during data aquisition
'
' Revision 1.6  2006/02/08 21:55:38  dan
' Changed to use tuning curve fixation/reward state logic. The parameters are controlled by the tuning curve parameters.
'
' Revision 1.5  2005/12/10 03:46:57  dan
' New version, using updated and improved CoolMouse application (a fixed version of mouse3.exe - new app is named CoolMouse.exe).
'

'========================================================================
'
' INPUTS
'
' Eye X, Y - ADC input 14, 15 respectively
' VSG trigger - assumed on DIGIN byte 0.  *** THE 1401 SHOULD HAVE PREFERENCES 
'               SET WITH THE "Event Ports 0 and 1 on read digital input connector" 
'               BOX CHECKED!!!
'
'========================================================================

' File system reference vars. Each var is a directory path, WITHOUT the trailing slash. 
var bin$, script$, config$;
script$ := View(App(3)).FileName$(1) + View(App(3)).FileName$(2);	' folder containing this script
bin$ := View(App(3)).FileName$(1) + View(App(3)).FileName$(2) + "..\\bin";	' Location of executables is ..\bin, relative to script dir
config$ := View(App(3)).FileName$(1) + View(App(3)).FileName$(2) + "..\\config";	' Location of executables is ..\bin, relative to script dir

''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
'	Get Current configuration START
'
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''

func GetCurrentConfiguration$()
	var key$;
	var s$;
	key$:="AlertRig";
	Profile(key$, "CurrentConfiguration", "default", s$);
	return s$;
end;


''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
'	Get Current configuration END
'
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
'	Data parameters START
'
'	Vars that control where data is stored. 
'
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''

var dataPathRoot$;		' base path for data storage
var dataDataSet$;		' folder under data path where data files placed
var dataCellName$;		' part of base name for all data files
var dataDataSetTextItem%;	' 

proc GetDataParameters()
	var stmp$;
	var key$;

	key$:="AlertRig\\Data";

	Profile(key$, "PathRoot", "C:\\Experiments", dataPathRoot$);
	Profile(key$, "DataSet", "", dataDataSet$);
	Profile(key$, "CellName", "", dataCellName$);
	return;
end;

proc SaveDataParameters()
	var stmp$;
	var key$;

	key$:="AlertRig\\Data";

	Profile(key$, "PathRoot", dataPathRoot$);
	Profile(key$, "DataSet", dataDataSet$);
	Profile(key$, "CellName", dataCellName$);
	return;
end;

func DataParametersDialog%()
	var i%;
	GetDataParameters();
	DlgCreate("Data Storage Parameters", 25, 10, 50);
	DlgText("Data root path: " + dataPathRoot$, 0, 1);
	dataDataSetTextItem% := DlgText("Data set name: " + dataDataSet$, 0, 2);
	DlgString(1, "Cell name:", 10, "", 0, 3);
        DlgButton(2, "New Data Set", NewDataSet%);
	i% := DlgShow(dataCellName$);
	if (i% = 1) then
		if Len(dataDataSet$) = 0 then
			Message("Must specify a data set (try the button!)");
		else
			if Len(dataCellName$) = 0 then
				Message("Must specify a cell name");
			else
				FilePathSet(dataPathRoot$ + "\\" + dataDataSet$, 3, 1);
				SaveDataParameters();
			endif;
		endif;
	endif;
	return i%;
end;


func NewDataSet%()
	var d$;
	var i%;
	var dirs$[100];	' if there are ever more than 100 datasets in a single day there will be trouble
	d$ := Date$(2, 2, 3, 3, "-");
	PrintLog("NewDataSet: date string = " + d$ + "\n");

	' Change current dir to data path root, then get list of subdirs with this date string
	PrintLog("NewDataSet: dataPathRoot$=" + dataPathRoot$ + "\n");
	FilePathSet(dataPathRoot$, 0, 1);
	i% := FileList(dirs$, -2, d$ + "-??");
        PrintLog("NewDataSet: found " + str$(i%) + " dirs\n");

	' form new dataset name. The first will have "-01" appended, the second "-02", etc. 
	dataDataSet$ := Print$("%s-%02d", d$, i%+1);
	PrintLog("NewDataSet: dataset= " + dataDataSet$ + "\n");
	DlgValue$(dataDataSetTextItem%, "Data set name: " + dataDataSet$);
	return 1;
end;



'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' Data parameters END
'
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''



'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
'	DAQ Parameters START
'
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''


var DistanceToScreenMM$;		' Distance to screen in MM
var DegreesPerVoltX;			' Conversion factor from ADC to visual degrees
var DegreesPerVoltY;			' Conversion factor from ADC to visual degrees
var EyeCoilSamplingFrequency%;		' Frequency to sample eye coil at
var NumberOfElectrodes%;		' Number of electrodes (i.e. wavemark inputs) in use
var JuicePerReward%;			' Number of juice squirts per reward


func DAQParametersDialog%()

	var iReturn%;
	var idist%;

	GetDAQParameters();

	idist% := val(DistanceToScreenMM$);
	DlgCreate("DAQ parameters: " + GetCurrentConfiguration$());
	DlgInteger(1, "Number of Electrodes:", 1, 7, 0, 0, 1);
	DlgInteger(2, "Screen Distance (MM):", 1, 5000);
	DlgReal(3, "Degrees/Volt (X):", 0, 100);
	DlgReal(4, "Degrees/Volt (Y):", 0, 100);
	DlgInteger(5, "Eye Coil Sampling Freq (Hz):", 1, 20000);
	DlgInteger(6, "Juice per reward:", 0, 10, 0, 0, 1);
	iReturn% := DlgShow(NumberOfElectrodes%, idist%, DegreesPerVoltX, DegreesPerVoltY, EyeCoilSamplingFrequency%, JuicePerReward%);

	if iReturn% = 1 then
		DistanceToScreenMM$ := str$(idist%);
		SaveDAQParameters();
	endif
	return iReturn%;
end;




	
proc GetDAQParameters()
	var key$;
	var DegreesPerVoltX$, DegreesPerVoltY$;

	key$ := "AlertRig\\" + GetCurrentConfiguration$() + "\\DAQ";
	Profile(key$, "DistanceToScreenMM", "850", DistanceToScreenMM$);	' will just pass this to stimulus app
	Profile(key$, "DegreesPerVoltX", "", DegreesPerVoltX$);
	Profile(key$, "DegreesPerVoltY", "", DegreesPerVoltY$);
	Profile(key$, "EyeCoilSamplingFrequency", 1000, EyeCoilSamplingFrequency%);
	Profile(key$, "NumberOfElectrodes", 1, NumberOfElectrodes%);
	Profile(key$, "JuicePerReward", 1, JuicePerReward%);
	DegreesPerVoltX := val(DegreesPerVoltX$);
	DegreesPerVoltY := val(DegreesPerVoltY$);

end;

proc SaveDAQParameters()
	var key$;
	var DegreesPerVoltX$, DegreesPerVoltY$;
	DegreesPerVoltX$ := str$(DegreesPerVoltX);
	DegreesPerVoltY$ := str$(DegreesPerVoltY);
	
	key$ := "AlertRig\\" + GetCurrentConfiguration$() + "\\DAQ";
	Profile(key$, "DistanceToScreenMM", DistanceToScreenMM$);
	Profile(key$, "DegreesPerVoltX", DegreesPerVoltX$);
	Profile(key$, "DegreesPerVoltY", DegreesPerVoltY$);
	Profile(key$, "EyeCoilSamplingFrequency", EyeCoilSamplingFrequency%);
	Profile(key$, "NumberOfElectrodes", NumberOfElectrodes%);
	Profile(key$, "JuicePerReward", JuicePerReward%);

end;

'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
'	DAQ Parameters END
'
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''


''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
'	Fixation Point parameters START
'
'	These vars and funcs control the parameters for the fixation point stored in the registry. 
'
''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''



var WindowRadius;
var FixationX, FixationY;
var FixationColor$;
var iFixationColor%;
var FixationDiameter;
var FixationColorList$[3]; 
var FixationArg$;

proc GetFixationPointParameters()
	var stmp$;
	var key$;
	key$ := "AlertRig\\" + GetCurrentConfiguration$() + "\\FixationPoint";
	Profile(key$, "WindowRadius", "1", stmp$);
	WindowRadius := val(stmp$);

	Profile(key$, "FixationX", "0", stmp$);
	FixationX := val(stmp$);
	Profile(key$, "FixationY", "0", stmp$);
	FixationY := val(stmp$);
	Profile(key$, "FixationColor", "0", stmp$);
	iFixationColor% := val(stmp$);

	FixationColorList$[0]:="red"; 
	FixationColorList$[1]:="green"; 
	FixationColorList$[2]:="blue"; 
	FixationColor$ := FixationColorList$[iFixationColor%];

	Profile(key$, "FixationDiameter", "0.5", stmp$);
	FixationDiameter := val(stmp$);

	' Form the argument for applications. Convenience for passing args. 
	FixationArg$ := " -f " + str$(FixationX) + "," + str$(FixationY) + "," + str$(FixationDiameter) + "," + FixationColor$;
end;

proc SaveFixationPointParameters()
	var key$;
	key$ := "AlertRig\\" + GetCurrentConfiguration$() + "\\FixationPoint";
	Profile(key$, "WindowRadius", str$(WindowRadius));
	Profile(key$, "FixationX", str$(FixationX));
	Profile(key$, "FixationY", str$(FixationY));
	Profile(key$, "FixationColor", str$(iFixationColor%));
	Profile(key$, "FixationDiameter", str$(FixationDiameter));
end;


func FixationPointDialog%()

	var i%;
	GetFixationPointParameters();
	DlgCreate("Fixation parameters: " + GetCurrentConfiguration$(), 25, 10);
	DlgReal(1, "Fixation X:", -20, 20);
	DlgReal(2, "Fixation Y:", -20, 20);
	DlgReal(3, "Fixation diam:", .1, 5);
	DlgReal(4, "Window radius:", .1, 10);
	DlgList(5, "Color:", FixationColorList$[]);
	i% := DlgShow(FixationX, FixationY, FixationDiameter, WindowRadius, iFixationColor%);	

	' If user cancelled, reload params
	if i% = 0 then
		GetFixationPointParameters();
	else
		SaveFixationPointParameters();
	endif

	return 1;
end;


''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
'	Fixation Point parameters END
'
''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''


'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' Tuning Curve script START
'
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''

var tunFixationDuration;	' Time required to hold fixation for reward (stim ON)
var tunMaintainFixation;	' Time required to hold fixation for reward (stim OFF)
var tunTimeOutTime;		' Time after break fixation
var tunAcquisitionTime;		' Time allowed to acquire fixation
var tunBackgroundColor$;	' background color for stim


proc GetTuningCurveScriptParameters()
	var stmp$;
	var key$;
	key$:="AlertRig\\" + GetCurrentConfiguration$() + "\\Scripts\\Tuning";

	Profile(key$, "FixationDuration", "2.0", stmp$);
	tunFixationDuration := val(stmp$);
	Profile(key$, "MaintainFixation", "2.0", stmp$);
	tunMaintainFixation := val(stmp$);
	Profile(key$, "TimeOutTime", "2.0", stmp$);
	tunTimeOutTime := val(stmp$);
	Profile(key$, "AcquisitionTime", "2.0", stmp$);
	tunAcquisitionTime := val(stmp$);
	Profile(key$, "BackgroundColor", "gray", tunBackgroundColor$);
end;



'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' Tuning Curve script END
'
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''









'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
'	Rig Daily Totals START
'
'
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''


var TotalTrials%;
var TotalRewards%;
var TotalDate$;


proc GetDailyTotals()
	var key$;
	key$ := "AlertRig\\Daily";
	Profile(key$, "TotalDate", "", TotalDate$);
	Profile(key$, "TotalTrials", 0, TotalTrials%);
	Profile(key$, "TotalRewards", 0, TotalRewards%);

	' Get date string if needed
	if Len(TotalDate$) = 0 then
		TotalDate$ := GetDayString$();
		SaveDailyTotals();
	endif
end;

proc SaveDailyTotals()
	var key$;
	key$ := "AlertRig\\Daily";
	Profile(key$, "TotalDate", TotalDate$);
	Profile(key$, "TotalTrials", TotalTrials%);
	Profile(key$, "TotalRewards", TotalRewards%);
end;

func DailyTotalsDialog%()
	GetDailyTotals();
	DlgCreate("Daily Totals");
	DlgText("Date: " + TotalDate$, 0, 1);
	DlgText("Trials: " + str$(TotalTrials%), 0, 2);
	DlgText("Rewards: " + str$(TotalRewards%), 0, 3);
	DlgButton(2, "Reset", ResetDailyTotals%);
	DlgShow();
	return 1;
end;


func GetDayString$()
	return Date$(2, 1, 3, 2, "-");
end;


func ResetDailyTotals%()
	GetDailyTotals();
	TotalRewards%:=0;
	TotalTrials%:=0;
	TotalDate$:= GetDayString$();
	SaveDailyTotals();
        return 0;
end;


'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
'	Rig Daily Totals END
'
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''







' Window handles and channel numbers
var XChannel%,YChannel%;		' Channel number assigned to eye x and y
var TriggerChannel%;			' Channel number assigned to vsg trigger input (i.e. trigger sent by vsg)
var ReadyChannel%;			' channel number for VSG ready pulse signal
var DataWindow%;	' time view
var XYWindow%;		' window with eye pos shown
var iStimChannel%;	' channel number for stimulus in xy window
var iStimWindowChannel%;' channel number for stimulus window in xy window
var iMonitorChannel%;	' channel number for monitor position display in xy window
var StimHandle%;	' handle for stimulus application
' Experimental control
var Pause%:=0;		' When 1, expt is paused - no idle processing done

' Display stuff
var FixWindowX[36],FixWindowY[36];	' points for displaying fixation window in xy view
var windowX[36], windowY[36];
' Stimulus location stuff
var iStimX%[8];
var iStimY%[8];
var iStimIndex%;





' Fetch parameters
GetDailyTotals();
GetDAQParameters();
GetFixationPointParameters();
GetTuningCurveScriptParameters();
GetDataParameters();

' Check for valid data file path
if Len(dataDataSet$) = 0 then
	Message("No data set is selected! Edit Data parameters...");
	' Might be nice to open the dialog here....
	halt;
else 
	' Set path for new data files
	FilePathSet(dataPathRoot$ + "\\" + dataDataSet$, 3, 1);
	FilePathSet(dataPathRoot$ + "\\" + dataDataSet$, 1, 1);
	SampleAutoName$(dataCellName$ + "_cm_000");
	SampleAutoFile(1);
	PrintLog("dataPathRoot=" + dataPathRoot$ + "\n");
	PrintLog("dataDataSet=" + dataDataSet$ + "\n");
	PrintLog("AutoFile status " + str$(SampleAutoFile()) + "\n");
endif



' Assign channel numbers for eye X,Y and trigger. 
XChannel% := NumberOfElectrodes%+1;
YChannel% := NumberOfElectrodes%+2;
TriggerChannel% := NumberOfElectrodes%+3;
ReadyChannel% := NumberOfElectrodes% + 4;
CreateSampleConfiguration();


' Get display windows ready
InitializeWindows();

' Prepare the toolbar buttons
InitializeToolbar();


'===============================================================================================



var tNow:=0;		' latest time for which there are values recorded. Used in IdleProcessing
var tLast:=-1;		' last time we checked for a trigger. 
var xEye, yEye;		' eye positions
var tLastUpdate:=-1;	' last time view was updated
var vTrigger;		' set by NextTime to indicate trigger transition
var tStateStart:=-1;	' time that present state started. Used to measure wait time, fixation time, etc. 
var tLastTrigger:=-1;	' last trigger time. New triggers have to be greater than this
var tTrigger:=-1;	' temp var for newly discovered trigger times
var tStimOn:=-1;	' time that stim was turned on. Used to measure spike rates 


' Constants for states
const stateStartTrial%:=0;		' Start trial state
const stateWaitForFixPtOn%:=1;		' Waiting for fixation point return trigger (on)
const stateWaitForBlank%:=2;		' Waiting for fixation point return trigger (off)
const stateWaitForStimOn%:=3;		' Wait for stimulus return trigger (on)
const stateWaitForStimOff%:=4;		' Wait for stimulus return trigger (off)
const stateWaitForAcquisition%:=5;	' Waiting for subject to acquire fixation point
const stateHoldFixation%:=6;		' Holding fixation point
const stateAbort%:=7;			' Failed trial state
const stateMaintainFixation%:=8;	' Maintaining fixation (stim off period)
const stateInterTrialInterval%:=9;	' time out after failed trial
const stateVSGWait%:=10;		' wait for vsg to send ready signal #1
const stateVSGWaitConfirm%:=11;		' waif for vsg to send ready signal #2
const stateTrialCompleted%:=12;		' trial has been completed successfully
const stateDone%:=13;	
var iState% := stateVSGWait%;	' present state

var nTrialsStarted%:=0;
var nTrialsCompleted%:=0;
var nTrialsAborted% :=0;		' 

func IdleProcessing%()
	var iStatus% := 1;	
	tNow := MaxTime();

	xEye := ChanMeasure(XChannel%,2,tNow-.001,tNow-.006)*DegreesPerVoltX;
	yEye := ChanMeasure(YChannel%,2,tNow-.001,tNow-.006)*DegreesPerVoltY;

	' Don't update display every time....
	if tNow-tLastUpdate > .005 then
		View(XYWindow%).XYAddData(1,xEye,yEye);
		tLastUpdate := tNow;
	endif


	docase 
		case iState% = stateVSGWait% then

			' Waiting for VSG to indicate it is ready. The indication is a pulse (up, then down, 1 frame apart) on port 6.
			tTrigger := NextTime(ReadyChannel%, tLast, vTrigger);
			if tTrigger > tLastTrigger and vTrigger = 0 then
				PrintLog("state stateVSGWait: Got leading edge of trigger\n");
				tLastTrigger := tTrigger;
				ChangeStateTo(stateVSGWaitConfirm%, tTrigger);
			endif;

		case iState% = stateVSGWaitConfirm% then

			' Waiting for VSG to confirm it is ready. The downward side of the pulse is expected...
			tTrigger := NextTime(ReadyChannel%, tLastTrigger, vTrigger);
			if tTrigger > tLastTrigger and vTrigger = 1 then
				PrintLog("state stateVSGWaitConfirm: Got trailing edge of trigger\n");
				tLastTrigger := tTrigger;
				ChangeStateTo(stateStartTrial%, tTrigger);
			endif;


		case iState% = stateStartTrial% then

			' Start trial. Put up fixation point.
			PrintLog("stateStartTrial: Send H key\n");
			SampleKey("H");
			ChangeStateTo(stateWaitForFixPtOn%, tTrigger);
		
		case iState% = stateWaitForFixPtOn% then

			PrintLog("stateWaitForFixPtOn: waiting.......\n");
			tTrigger := NextTime(TriggerChannel%, tLast, vTrigger);
			if tTrigger > tLast and vTrigger = 0 then
				' Fixation point is up
				PrintLog("stateWaitForFixPtOn: signal received.\n");
				tLastTrigger := tTrigger;
				ChangeStateTo(stateWaitForAcquisition%, tTrigger);
				DrawStim(1);	' actually this draws the location of the fixpt.
			endif

		case iState% = stateWaitForAcquisition% then

			' Waiting for eye to fall inside of fixation window
			if InFixationWindow%(xEye, yEye) = 1 then
				PrintLog("stateWaitForAcquisition: eye in fixation window\n");
				ChangeStateTo(stateHoldFixation%, tNow);
			else 
				if tNow - tStateStart > tunAcquisitionTime then
					' failed to acquire target. 
					PrintLog("stateWaitForAcquisition: failed.\n");
					ChangeStateTo(stateAbort%, tNow);
				endif
			endif

		case iState% = stateAbort% then

			' Signal "X" turns off fixpt and stimulus. The next state 'stateWaitForBlank' only checks for 
			' fixpt off. 
			PrintLog("stateAbort: send L key.\n");
			SampleKey("L");
			ChangeStateTo(stateWaitForBlank%, tNow);

		case iState% = stateWaitForBlank% then

			' we just wait for fix point off signal in this case. 
			tTrigger := NextTime(TriggerChannel%, tLast, vTrigger);
			if tTrigger > tLast and vTrigger = 1 then
				' Fixation point is off
				PrintLog("stateWaitForBlank: Fix pt is off.\n");
				tLastTrigger := tTrigger;
				ChangeStateTo(stateInterTrialInterval%, tTrigger);
				DrawStim(0);	' actually this draws the location of the fixpt.
			endif

		case iState% = stateInterTrialInterval% then

			if tNow - tStateStart > tunTimeOutTime then

				PrintLog("stateInterTrialInterval: time out is done.\n");
				ChangeStateTo(stateStartTrial%, tNow);

			endif

		case iState% = stateHoldFixation% then

			if InFixationWindow%(xEye, yEye) = 0 then
	       		
				PrintLog("stateWaitForFixation: outside fixation window, aborting trial.\n");
				ChangeStateTo(stateAbort%, tNow);

			else 

				if tNow - tStateStart > tunFixationDuration then

					' update tStateStart
					ChangeStateTo(stateHoldFixation%, tNow);
					PrintLog("stateWaitForFixation: successful trial.\n");
	
					' Reward
					Reward%();
	
				endif

			endif

		else
			
			' Unknown state!
			Message("Unknown state=" + str$(iState%));
			halt;

	endcase;

	tLast := tNow;
	return iStatus%;
end;

'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
proc ChangeStateTo(stateTo%, tStart)
	iState% := stateTo%;
	if tStart > 0 then tStateStart := tStart; endif;
end;


'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''



'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
proc CreateSampleConfiguration()
	var index;
	SampleClear(); 'Set standard sampling state
	SampleAutoFile(0); 'Enable automatic file naming
'	SampleAutoComment(0); 'Prompt for comment after sampling
'	SampleAutoCommit(60); 'Seconds between each file commit

	'Channel recording definitions
	SampleEvent(TriggerChannel%, 1, 2, 3600); 'Trigger channel, level
	SampleComment$(TriggerChannel%, "Trigger");
	SampleTitle$(TriggerChannel%, "Trigger");

	' channel to look for ready signal from vsg
	SampleEvent(ReadyChannel%,6,2,3600); 'Trigger channel, level
	SampleComment$(ReadyChannel%,"VSG Ready");
	SampleTitle$(ReadyChannel%,"VSG Ready");


'	for index := 1 to NumberOfElectrodes% do
'		SampleWaveMark(index,index-1,2000,34,15,28000); ' chan, port, event rate, points, pre-trigger, rate
'		SampleTitle$(index, "Electrode_"+Str$(index)); 
'	next

	'EYE COIL CHANNELS. Last # is sampling freq in Hz. 
	SampleWaveform(XChannel%, 14, 1000);
	SampleTitle$(XChannel%,"Eye X");
	SampleWaveform(YChannel%, 15, 1000);
	SampleTitle$(YChannel%, "Eye Y");

	SampleSequencer(script$ + "Fixation.pls");
	SampleOptimise(2, 2, 2, 2, 50);  'Set optimise mode (do this last)
	SampleMode(1); 'Continuous sampling
end;


'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' DrawStim
' 
' Draws stimulus in xy window (iDraw%==1) or blanks it (0). 
proc DrawStim(iDraw%)

	if iDraw% > 0 then
		var xstim, ystim;
		xstim := GetStimX();
		ystim := GetStimY();

		' Draw stimulus in xy window
		View(XYWindow%).XYAddData(iStimChannel%, xstim, ystim);
	
		' draw fixation window
		ArrConst(windowX[], FixWindowX[]);
		ArrAdd(windowX[], xstim);
		ArrConst(windowY[], FixWindowY[]);
		ArrAdd(windowY[], ystim);

		View(XYWindow%).XYAddData(iStimWindowChannel%, windowX[], windowY[]);		
	else 
		' erase the stim and the window from xy view
		View(XYWindow%).XYDelete(iStimChannel%);
		View(XYWindow%).XYDelete(iStimWindowChannel%);
	endif

end;


proc InitializeWindows()

	'Open the data sampling window
	DataWindow% := FileNew(0,4);
	Window(-0.235849,52.746,97.2484,99.8856);
	View(DataWindow%).WindowVisible(1);

	'Open an XY view to display eye position
	XYWindow% := FileNew(12);
	XRange(-30,30);
	YRange(-2,-30,30);
	XYDrawMode(0,5,0);
	WindowVisible(1);
	Window(-0.550314,0.114416,41.5094,52.746);
	XYColour(1,16);
	XYSize(1,-1);

	'Calcuate the fixation window
	var index%;
	var twopi;
	twopi := 2.0*4.0*ATan(1.0);
	
	for index% := 0 to 35 do
		FixWindowX[index%] := WindowRadius * Cos(index% * twopi/36.0);
		FixWindowY[index%] := WindowRadius * Sin(index% * twopi/36.0);
	next;

	'Create a new channel in the XY view to display the fixation window
	iStimWindowChannel% := XYSetChan(0);
	XYColour(2,13);
	XYDrawMode(2,2,1);
	XYJoin(2,1);

	'Draw the fixation window ON SECOND THOUGHT, DON'T
	'XYAddData(2, FixWindowX[], FixWindowY[]);	

	'Create a new channel in the XY view to display the fixation point
	iStimChannel% := XYSetChan(0);

	'Create a new channel in the XY view to show the monitor's location
	iMonitorChannel% := XYSetChan(0);
	XYColour(4,13);
	XYDrawMode(4,3,1);
	XYJoin(4,2);
	XYAddData(4,-9,-7);
	XYAddData(4,9,-7);
	XYAddData(4,9,7);
	XYAddData(4,-9,7);

end;


'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' InitilizeToolbar - prepare toolbar buttons. Note that the idle processing function (ToolbarSet(0, blah, blah)) is 
' not set here. That's done when the user hits the start button.
'
proc InitializeToolbar()

	View(App(8)).WindowVisible(0);	'Hide the standard sample bar
	ToolbarVisible(1);
	ToolbarSet(1,"Start",Start%);
	ToolbarSet(2,"Stop", Stop%);
	ToolbarSet(3,"Juice",Reward%);
	ToolbarEnable(2,0);
	Toolbar("Go", 0x3ff);

end;


' Get grating p[arameters from registry AlertRig\\(config)\\Gratings\\type$
func GetGratingParameters$(type$)
	var key$;
	var stmp$;
	key$ := "AlertRig\\" + GetCurrentConfiguration$() + "\\Gratings";
	Profile(key$, type$, "", stmp$);
	return stmp$;
end;


' Used to hard-quit from toolbar. This will close data files without saving!!! 
' It is important that this function be disabled once sampling is started!!!

func Quit%()
	FileClose(-1,-1);
	return 0;
end;

''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func Start%()
	var CommandLine$;
	var FixationPoint$;
	var Extras$;
	var Distractors$:="";
	
	SampleStart(0); 'Start sampling
	
	CommandLine$ := bin$ + "\\CoolMouse";

	'Begin the stimulus program. It will take a few seconds for the VSG to initialize.
	PrintLog(CommandLine$+"\n");
	StimHandle% := ProgRun(CommandLine$,1);
	if StimHandle% <0 then 
		Message("Could not start stimulus."); 
		SampleStop();
		halt; 
	endif
'	Yield(5);	'Wait a few seconds to make sure the VSG has time to initialize.

	ToolbarSet(0,"",IdleProcessing%);	'Enable the IdleProcessing function
	ToolbarEnable(2,1);
	ToolbarEnable(1,0);
	View(DataWindow%);
	Yield(.1);
	return 1;	
end;


''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func Stop%()

	' Disable idle process func
	ToolbarSet(0,"");

	' Tell stim app to shut down
	SampleKey("Q");
	Yield(.1);
	SampleStop();
	ProgKill(StimHandle%);
	ProgRun(bin$ + "\\ClearTrigger",0);

end;



''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func GetStimX()
	return FixationX;
end;

func GetStimY()
	return FixationY;
end;

'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func InFixationWindow%(EyePosX,EyePosY)
	var i% := 0;
	var xstim, ystim;
	xstim := GetStimX();
	ystim := GetStimY();
	'Determine if the eye position is within the fixation window
	if (Pow(EyePosX-xstim, 2) + Pow(EyePosY-ystim, 2)) <= Pow(WindowRadius,2) then 
		i% := 1;
	endif
	return i%;
end;


''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func Reward%()
	var i;
	for i:=1 to JuicePerReward% do Yield(.05); SampleKey("J"); next
	return 1;
end;





