#include "../../Spike2Util/TrialBlockGen.s2s"
#include "../../Spike2Util/GratingUtilities.s2s"
#include "Usrey.s2s"
#include "Joystick.s2s"

' Local config variables

const rivMaxTargets% := 2;
var rivNTargets% := 0;
var rivTargetSpecs$[rivMaxTargets%];
var rivMaxWaitForReadyTime := 1.0;
var rivReadyFailWaitTime := 1.0;
var rivMaxResponseTime := 1.0;
var rivResponseFailWaitTime := 3.0;
var rivResponseIncorrectWaitTime := 3.0;
var rivResponseBrokenWaitTime := 3.0;
var rivMaxStimWaitTime := 1.5;
var rivMaxStimTime := 3.0;
var rivResponseCorrectRewardSize% := 3;
var rivMaintainResponseRewardSize% := 1;
var rivMaintainResponseRewardWait := .5;
var rivUseBeep% := 0;
var rivBeepLengthMS% := 100;
var rivNBlocks% := 10;
var rivNTrialsEachTypePerBlock% := 4;     ' Number of trials/block = this * 2
var rivLeftGrating$ := "-3,0,3,3,100,.5,.5,0,b,s,e";
var rivRightGRating$ := "3,0,3,3,100,.5,.5,0,b,s,e";
var rivLeftGratingTextItem%;
var rivRightGratingTextItem%;

' Counters

var rivCtrNTrials% := 0;
var rivCtrReadyFail% := 0;
var rivCtrNoResponse% := 0;
var rivCtrIncorrect% := 0;
var rivCtrCorrect% := 0;
var rivCtrNRewards% := 0;

' Channel numbers for DAQ inputs

var rivChanEyeX%    := 11;
var rivChanEyeY%    := 12;

' VSG trigger input channels

var rivChanVSGReady%    :=  20;
var rivChanVSGStim%     :=  21;

' windows

var rivWindowData%;
var rivWindowXY%;

' Controls

var rivIsPaused% := 0;
var rivStimHandle% := 0;
var rivCorrectResponse%;
var rivIncorrectResponse%;
var rivTStartStim;                  ' time at which stim is presented
var rivTLastReward;                 ' time at which last reward was delivered - for maintainence rewards
var rivUniversalIntertrialTime;     ' time to wait between trials

' States - these constants define a particular state

const stateStartup%             :=  1;
const statePaused%              :=  2;
const stateTrialStart%          :=  3;
const stateBeep%                :=  4;
const stateWaitForReady%        :=  5;
const stateWaitForStimUp%       :=  6;
const stateWaitForResponse%     :=  7;
const stateCorrectResponse%     :=  8;
const stateMaintainResponse%    :=  9;
const stateMaxResponse%         :=  10;
const stateBreakResponse%       :=  11;
const stateWaitForStimOff%      :=  12;
const stateIntertrialWait%      :=  13;
const stateReadyFail%           :=  14;
const stateIncorrectResponse%   :=  15;
const stateNoResponse%          :=  16;
const stateQuit%                :=  17;
const stateDone%                :=  18;
const stateVSGWait%             :=  19;
const stateVSGConfirm%          :=  20;
const stateTrialCompleted%      :=  21;

var iState% := stateStartup%;              ' This holds the current state

var tNow:=0;		    ' latest time for which there are values recorded. Used in IdleProcessing
var tLast:=-1;		    ' last time we checked for a trigger. 
var xEye, yEye;		    ' eye positions
var tLastUpdate:=-1;	' last time view was updated
var vTrigger;		    ' set by NextTime to indicate trigger transition
var tStateStart:=-1;	' time that present state started. Used to measure wait time, fixation time, etc. 
var tLastTrigger:=-1;	' last trigger time. New triggers have to be greater than this
var tTrigger:=-1;	    ' temp var for newly discovered trigger times




'===========================================================================================
'
' Script execution starts here. 
'
'===========================================================================================

LogInit(1);
InitJoystick(-1);
tbgInit(2, rivNTrialsEachTypePerBlock%, rivNBlocks%);


if RivalryDialog%() = 0 then
    halt;
endif

' Sampling config
CreateSampleConfiguration();

' Prepare display windows, input channels, etc. 
InitializeWindows();

' Set up toolbar and launch
InitializeToolbar();




'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' CreateSampleConfiguration - Set up recording channels, dig input channels for VSG communication
'
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''

proc CreateSampleConfiguration()
	var index;
    
	SampleClear(); 'Set standard sampling state
	SampleAutoComment(0); 'Prompt for comment after sampling
	SampleAutoCommit(60); 'Seconds between each file commit
    
    FilePathSet(GetDataPathRoot$() + "\\" + GetDataSetName$(), 3);
    FilePathSet(GetDataPathRoot$() + "\\" + GetDataSetName$(), 1);
    SampleAutoName$(dataCellName$ + "_riv_000");
	SampleAutoFile(1);
    
	'Channel recording definitions
	SampleEvent(rivChanVSGStim%, 2, 2, 3600); 'Trigger channel, level
	SampleComment$(rivChanVSGStim%, "Stim");
	SampleTitle$(rivChanVSGStim%, "Stim");
	
	SampleEvent(rivChanVSGReady%, 6, 2, 3600); 'Trigger channel, level
	SampleComment$(rivChanVSGReady%, "VSG Ready");
	SampleTitle$(rivChanVSGReady%, "VSG Ready");
    
	SampleWaveform(rivChanEyeX%, 14, 1000);
	SampleTitle$(rivChanEyeX%, "Eye X");
	SampleWaveform(rivChanEyeY%, 15, 1000);
	SampleTitle$(rivChanEyeY%, "Eye Y");

    
	SampleSequencer(script$ + "Rivalry.pls");
	SampleOptimise(2, 2, 2, 2, 50);  'Set optimise mode (do this last)
	SampleMode(1); 'Continuous sampling

end;




'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' InitilizeToolbar - prepare toolbar buttons. Note that the idle processing function (ToolbarSet(0, blah, blah)) is 
' not set here. That's done when the user hits the start button.
'
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''

proc InitializeToolbar()

	View(App(8)).WindowVisible(0);	'Hide the standard sample bar
	ToolbarVisible(1);
'	UpdateToolbarText();
	ToolbarSet(1,"Sample start",Start%);
	ToolbarSet(2,"Sample stop", Stop%);
	ToolbarSet(3,"Juice", Reward%);
	ToolbarSet(4,"Pause stimuli",Pause%);
	ToolbarSet(5,"Resume stimuli",Resume%);
	ToolbarSet(6,"Quit",Quit%);
	ToolbarEnable(2,0);
	ToolbarEnable(4,0);
	ToolbarEnable(5,0);
	Toolbar("Go",0x3ff);

end;



'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' InitilizeWindows - Open data file, set up windows for online display.
'
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''

proc InitializeWindows()

	'Open the data sampling window
	rivWindowData% := FileNew(0,4);
	Window(0,48,100,95);
	View(rivWindowData%).WindowVisible(1);

	'Open an XY view to display eye position
	rivWindowXY% := FileNew(12);
	XRange(-30,30);
	YRange(-2,-30,30);
	XYDrawMode(0,5,0);
	WindowVisible(1);
	Window(0, 0, 100, 47);
	XYColour(1,16);
	XYSize(1,-1);

end;



func IdleProcessing%()
	var iStatus% := 1;	
    var iLoop% := 0;        ' States can set this to 1 if we stay in state loop
    var iResponse%;
    
	tNow := MaxTime();

'	xEye := ChanMeasure(XChannel%,2,tNow-.001,tNow-.006)*DegreesPerVoltX;
'	yEye := ChanMeasure(YChannel%,2,tNow-.001,tNow-.006)*DegreesPerVoltY;
'	View(XYWindow%).XYAddData(1,xEye,yEye);
    
    repeat
        iLoop% := 0;
        docase 
        case iState% = stateStartup% then
            
            LogStatus("stateStartup", "Starting up.");
            ChangeStateTo(stateVSGWait%, tNow);
            iLoop% := 1;
            
        case iState% = stateVSGWait% then
            
            ' Waiting for VSG to indicate it is ready. The indication is a pulse (up, then down, 1 frame apart) on port 6.
            tTrigger := NextTime(rivChanVSGReady%, tLast, vTrigger);
            if tTrigger > tLastTrigger and vTrigger = 0 then
                LogStatus("stateVSGWait", "Got leading edge of trigger.");
                tLastTrigger := tTrigger;
                ChangeStateTo(stateVSGConfirm%, tTrigger);                
                iLoop% := 1;
            endif;
            
        case iState% = stateVSGConfirm% then
            
            ' Waiting for VSG to confirm it is ready. The downward side of the pulse is expected...
            tTrigger := NextTime(rivChanVSGReady%, tLastTrigger, vTrigger);
            if tTrigger > tLastTrigger and vTrigger = 1 then                
                LogStatus("stateVSGConfirm", "Got trailing edge of trigger.");
                tLastTrigger := tTrigger;
                ChangeStateTo(stateTrialStart%, tTrigger);
                iLoop% := 1;
            endif;
            
        case iState% = stateTrialStart% then
            
            var s%;
            s% := PrepareTrial%();
            if s% = 1 then
                ChangeStateTo(stateBeep%, tNow);
            else
                ChangeStateTo(stateDone%, tNow);
            endif
            iLoop% := 1;
            
        case iState% = stateBeep% then
            
            if rivUseBeep% <> 0 then
                LogError("stateBeep", "TODO - implement beep!");
            endif
            ChangeStateTo(stateWaitForReady%, tNow);
            iLoop% := 1;
            
        case iState% = stateWaitForReady% then
            
            ' Wait for joystick to be positioned in the center. 
            if GetJoystickPosition%() = JSCenter% then
                LogStatus("WaitForReady", "Joystick ready.");
                ChangeStateTo(stateWaitForStimUp%, tNow);
                docase 
                case rivCorrectResponse% = JSLeft% then
                    SampleKey("l");
                case rivCorrectResponse% = JSRight% then
                    SampleKey("r");
                else
                    LogError("stateWaitForReady", "Correct response unknown");
                    Stop%();
                endcase
            endif
            iLoop% := 0;
            
        case iState% = stateWaitForStimUp% then
            
            ' Waiting for stim signal on channel StimChannel%
			tTrigger := NextTime(rivChanVSGStim%, tLastTrigger, vTrigger);
			if tTrigger > tLastTrigger and vTrigger = 0 then
				LogStatus("stateVSGWaitForStimUp", "Stimulus is up.\n");
				tLastTrigger := tTrigger;
                rivTStartStim := tTrigger;
				ChangeStateTo(stateWaitForResponse%, tTrigger);
			endif;
            iLoop% := 0;
            
        case iState% = stateWaitForResponse% then
            
            ' Waiting for response. PrepareTrial() sets the global var rivCorrectResponse% (and rivIncorrectResponse%) 
            ' to either JSLeft% or JSRight%.
            iResponse% := GetJoystickPosition%();
            iLoop% := 1;
            docase
            case iResponse% = rivCorrectResponse% then
                LogStatus("stateWaitForResponse", "Correct response!");
                ChangeStateTo(stateCorrectResponse%, tNow);
                iLoop% := 1;
            case iResponse% = rivIncorrectResponse% then
                LogStatus("stateWaitForResponse", "Incorrect response!");
                ChangeStateTo(stateIncorrectResponse%, tNow);
                iLoop% := 1;
            case tNow - tStateStart > rivMaxResponseTime then
                LogStatus("stateWaitForResponse", "No response!");
                ChangeStateTo(stateNoResponse%, tNow);
                iLoop% := 1;
            else
                iLoop% := 0;
            endcase
            
        case iState% = stateNoResponse% then
            
            rivCtrNoResponse% += 1;
            SampleKey("X");
            rivUniversalIntertrialTime := rivResponseFailWaitTime;
            ChangeStateTo(stateWaitForStimOff%, tNow);
            iLoop% := 0;
            
        case iState% = stateCorrectResponse% then
            
            rivCtrCorrect% += 1;
            DeliverReward(rivResponseCorrectRewardSize%);
            ChangeStateTo(stateMaintainResponse%, tNow);
            iLoop% := 0;
            
        case iState% = stateIncorrectResponse% then
            
            rivCtrIncorrect% += 1;
            SampleKey("X");
            rivUniversalIntertrialTime := rivResponseIncorrectWaitTime;
            ChangeStateTo(stateWaitForStimOff%, tNow);
            iLoop% := 0;
            
        case iState% = stateMaintainResponse% then
            
            ' If subject maintains correct response for specified amount of time, deliver another
            ' reward, loop again. Upper time limit on this loop applies. 
            
            iResponse% := GetJoystickPosition%();
            iLoop% := 1;
            docase
            case iResponse% = rivIncorrectResponse% then
                LogStatus("stateMaintainResponse", "Correct response broken!");
                ' TODO Set universal intertrail time
                rivUniversalIntertrialTime := rivResponseBrokenWaitTime;
                SampleKey("X");
                ChangeStateTo(stateWaitForStimOff%, tNow);
                iLoop% := 0;
            case tNow - rivTStartStim > rivMaxStimTime then
                LogStatus("stateMaintainResponse", "Max response time reached. Moving on...");
                ' TODO Set universal intertrail time
                SampleKey("X");
                ChangeStateTo(stateWaitForStimOff%, tNow);
                iLoop% := 0;
            case iResponse% = rivCorrectResponse% and tNow - tStateStart > rivMaintainResponseRewardWait then
                LogStatus("stateMaintainResponse", "Maintainence reward!");
                DeliverReward(rivMaintainResponseRewardSize%);
                ChangeStateTo(stateMaintainResponse%, tNow);
                iLoop% := 0;
            else
                LogError("stateMaintainResponse", "Unknown condition!!!");
                iLoop% := 0;
            endcase
            
        case iState% = stateWaitForStimOff% then
            
            ' Waiting for stim signal off channel StimChannel%
            iLoop% := 0;
			tTrigger := NextTime(rivChanVSGStim%, tLastTrigger, vTrigger);
			if tTrigger > tLastTrigger and vTrigger = 1 then
				LogStatus("stateVSGWaitForStimUp", "Stimulus is off.\n");
				tLastTrigger := tTrigger;
				ChangeStateTo(stateIntertrialWait%, tTrigger);
                iLoop% := 1;
			endif;
            
        case iState% = stateIntertrialWait% then
            
            ' Any states that exit to here should have set the universal intertrial wait time!
            iLoop% := 0;
            if tNow - tStateStart > rivUniversalIntertrialTime then
                ChangeStateTo(stateTrialCompleted%, tNow);
                iLoop% := 1;
            endif
            
        case iState% = stateTrialCompleted% then
            
            LogStatus("stateTrialCompleted", "Trial completed.");
            ' If correction trials are required, deal with that now....
            ChangeStateTo(stateTrialStart%, tNow);
            iLoop% := 1;
            
        case iState% = stateDone% then
            
            LogStatus("stateDone", "Reached done state. Calling Stop%()...\n");
            iLoop% := 0;
            iStatus% := 0;
            
        else
            
            ' Unknown state!
            Message("Unknown state=" + str$(iState%));
            halt;
            
        endcase;
    until iLoop% = 0;
    
	tLast := tNow;
	return iStatus%;
end;


proc ChangeStateTo(stateTo%, tStart)
	iState% := stateTo%;
	if tStart > 0 then tStateStart := tStart; endif;
end;

proc DeliverReward(iNumRewards%)
    SampleSeqVar(1, iNumRewards%);
    SampleKey("R");
    return;
end

func Reward%()
    DeliverReward(1);
    return 1;
end


' Used to hard-quit from toolbar. This will close data files without saving!!! 
' It is important that this function be disabled once sampling is started!!!

func Quit%()
	if rivStimHandle% > 0 then
        ProgKill(rivStimHandle%);
        while ProgStatus(rivStimHandle%) > 0 do
            Yield();
        wend
        rivStimHandle% := 0;
    endif
	FileClose(-1,-1);
	return 0;
end;

''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func Stop%()

	' Disable idle process func
	ToolbarSet(0, "");

	' Tell stim app to shut down
	SampleKey("q");
	Yield(.1);
	SampleStop();

	if rivStimHandle% > 0 then
        ProgKill(rivStimHandle%);
        while ProgStatus(rivStimHandle%) > 0 do
            Yield();
        wend
        rivStimHandle% := 0;
    endif
    return 0;

end;


''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func Start%()
    var cmdLine$;
    
    ' Start sampling
   	SampleStart(0);

    ' Hack to just run the darned thing. 
    cmdLine$ := "cmd /k " + GetBinDir$(1) + "gratings -d 555 -b gray -s 3,-4,3,3,100,.2,1,90,b,s,e -s 3,4,3,3,100,.2,1,90,b,s,e";
    
	'Begin the stimulus program. It will take a few seconds for the VSG to initialize.
	LogInfo(cmdLine$+"\n");
	rivStimHandle% := ProgRun(cmdLine$, 1);
	if rivStimHandle% < 0 then Message("Could not start stimulus."); halt; endif
	
	ToolbarSet(0,"",IdleProcessing%);	'Enable the IdleProcessing function
	ToolbarEnable(1,0);
	ToolbarEnable(2,1);
	ToolbarEnable(4,1);
	View(rivWindowData%);
    return 1;
end;

func Pause%()
    LogInfo("Pause requested.");
    rivIsPaused% := 1;
    return 1;
end

func Resume%()
    LogInfo("Resume requested.");
    rivIsPaused% := 0;
    return 1;
end


' PrepareBlock
'
' Prepares variables etc used for driving a block of trials for this expt. 
' TODO 

proc PrepareBlock()
    LogInfo("Preparing block...");
    tbgInit(2, rivNTrialsEachTypePerBlock%, rivNBlocks%);
    return
end

' PrepareTrial
'
' Prepares variables etc used for driving a single trial

func PrepareTrial%()
    var index%;
    var s%;
    s% := tbgGetTrialIndex%(index%);
    if s% = 1 then
        docase
        case index% = 0 then
            LogInfo("Preparing trial... LEFT");
            rivCorrectResponse% := JSLeft%;
            rivIncorrectResponse% := JSRight%;
        case index% = 1 then
            LogInfo("Preparing trial... RIGHT");
            rivCorrectResponse% := JSRight%;
            rivIncorrectResponse% := JSLeft%;
        else
            LogError("", "Unknown index returned from tbgGetTrialIndex%.\n");
        endcase
    endif
    return s%;
end


func RivalryDialog%()
    var i%;
    GetRivalryParameters();
    DlgCreate("Rivalry Parameters");
    DlgGroup("General", 1, 1, 40, 6);
    DlgInteger(1, "# of blocks", 1, 100, 25, 2);
    DlgInteger(2, "Trials per block", 1, 100, 25, 3);
    DlgCheck(3, "Use beep?", 1, 4);
    DlgInteger(4, "Beep length (ms)", 1, 1000, 25, 5);
    DlgButton(101, "Timing", RivalryTimingDialog%, 1, 6);
    DlgGroup("Reward", 1, 7, 40, 5);
    DlgInteger(5, "Reward (correct resp)", 1, 10, 25, 8);
    DlgInteger(6, "Reward (maintain)", 1, 10, 25, 9);
    DlgReal(7, "Time between rewards (s)", 1, 20000, 25, 10);
    DlgReal(8, "Max stim time (s)", .01, 20, 25, 11);
    DlgGroup("Gratings", 1, 12, 40, 3);
    DlgButton(102, "Left Grating", RivalryLGratingDialog%, 1, 13);
    rivLeftGratingTextItem% := DlgText(rivLeftGrating$, 15, 13);
    DlgButton(103, "Right Grating", RivalryRGratingDialog%, 1, 14);
    rivRightGratingTextItem% := DlgText(rivRightGrating$, 15, 14);
    i% := DlgShow(rivNBlocks%, rivNTrialsEachTypePerBlock%, rivUseBeep%, rivBeepLengthMS%,
                    rivResponseCorrectRewardSize%, rivMaintainResponseRewardSize%, rivMaintainResponseRewardWait, rivMaxStimTime);
    if i% = 1 then
        SaveRivalryParameters();
    endif
    return i%;
end

proc GetRivalryParameters()
    var key$;
    var stmp$;
    key$ := GetRegistryKey$(1) + "\\Rivalry";
    Profile(key$, "LeftGrating", rivLeftGrating$, rivLeftGrating$);
    Profile(key$, "RightGrating", rivRightGrating$, rivRightGrating$);
    Profile(key$, "NBlocks", rivNBlocks%, rivNBlocks%);
    Profile(key$, "NTrialsEachTypePerBlock", rivNTrialsEachTypePerBlock%, rivNTrialsEachTypePerBlock%);
    Profile(key$, "UseBeep", rivUseBeep%, rivUseBeep%);
    Profile(key$, "BeepLengthMS", rivBeepLengthMS%, rivBeepLengthMS%);
    Profile(key$, "ResponseCorrectRewardSize", rivResponseCorrectRewardSize%, rivResponseCorrectRewardSize%);
    Profile(key$, "MaintainResponseRewardSize", rivMaintainResponseRewardSize%, rivMaintainResponseRewardSize%);
    Profile(key$, "MaintainResponseRewardWait", str$(rivMaintainResponseRewardWait), stmp$);
    rivMaintainResponseRewardWait := val(stmp$);
    Profile(key$, "MaxStimTime", str$(rivMaxStimTime), stmp$);
    rivMaxStimTime := val(stmp$);
    Profile(key$, "MaxWaitForReadyTime", str$(rivMaxWaitForReadyTime), stmp$);
    rivMaxWaitForReadyTime := val(stmp$);
    Profile(key$, "ReadyFailWaitTime", str$(rivReadyFailWaitTime), stmp$);
    rivReadyFailWaitTime := val(stmp$);
    Profile(key$, "MaxResponseTime", str$(rivMaxResponseTime), stmp$);
    rivMaxResponseTime := val(stmp$);
    Profile(key$, "ResponseFailWaitTime", str$(rivResponseFailWaitTime), stmp$);
    rivResponseFailWaitTime := val(stmp$);
    Profile(key$, "ResponseIncorrectWaitTime", str$(rivResponseIncorrectWaitTime), stmp$);
    rivResponseIncorrectWaitTime := val(stmp$);
    Profile(key$, "ResponseBrokenWaitTime", str$(rivResponseBrokenWaitTime), stmp$);
    rivResponseBrokenWaitTime := val(stmp$);
    Profile(key$, "MaxStimWaitTime", str$(rivMaxStimWaitTime), stmp$);
    rivMaxStimWaitTime := val(stmp$);
end

proc SaveRivalryParameters()
    var key$;
    var stmp$;
    key$ := GetRegistryKey$(1) + "\\Rivalry";
    Profile(key$, "LeftGrating", rivLeftGrating$);
    Profile(key$, "RightGrating", rivRightGrating$);
    Profile(key$, "NBlocks", rivNBlocks%);
    Profile(key$, "NTrialsEachTypePerBlock", rivNTrialsEachTypePerBlock%);
    Profile(key$, "UseBeep", rivUseBeep%);
    Profile(key$, "BeepLengthMS", rivBeepLengthMS%);
    Profile(key$, "ResponseCorrectRewardSize", rivResponseCorrectRewardSize%);
    Profile(key$, "MaintainResponseRewardSize", rivMaintainResponseRewardSize%);
    Profile(key$, "MaintainResponseRewardWait", str$(rivMaintainResponseRewardWait));
    Profile(key$, "MaxStimTime", str$(rivMaxStimTime));
    Profile(key$, "MaxWaitForReadyTime", str$(rivMaxWaitForReadyTime));
    Profile(key$, "ReadyFailWaitTime", str$(rivReadyFailWaitTime));
    Profile(key$, "MaxResponseTime", str$(rivMaxResponseTime));
    Profile(key$, "ResponseFailWaitTime", str$(rivResponseFailWaitTime));
    Profile(key$, "ResponseIncorrectWaitTime", str$(rivResponseIncorrectWaitTime));
    Profile(key$, "ResponseBrokenWaitTime", str$(rivResponseBrokenWaitTime));
    Profile(key$, "MaxStimWaitTime", str$(rivMaxStimWaitTime));
end


func RivalryTimingDialog%()
	DlgCreate("Rivalry timing", 25, 10);
	DlgReal(1, "Max rdy time(s):", .01, 10);
	DlgReal(2, "Rdy FAIL wait time(s):", .01, 10);
    DlgReal(3, "Max resp time(s):", .01, 10);
    DlgReal(4, "Resp FAIL wait time(s):", .01, 10);
    DlgReal(5, "Resp INCORRECT wait time(s):", .01, 10);
    DlgReal(6, "Resp BROKEN wait time(s):", .01, 10);
    DlgReal(7, "Max stim wait time(s):", .01, 10);
	DlgShow(rivMaxWaitForReadyTime, rivReadyFailWaitTime, rivMaxResponseTime, rivResponseFailWaitTime, 
            rivResponseIncorrectWaitTime, rivResponseBrokenWaitTime, rivMaxStimWaitTime);
    return 1;
end

func DoGratingDialog%(label$, &param$)
    var status%;
    var disable%[1];
    var ndisable% := 0;
    var x, y, w, h, sf, tf, orientation;
    var contrast%;
    var cv$, pattern$, aperture$;
    
    status% := GratingParametersDialog%(label$, param$,
                                        disable%[], ndisable%, 
                                        x, y, w, h, contrast%, sf, tf, orientation, cv$, pattern$, aperture$);                                       
    return status%;
end

func RivalryLGratingDialog%()
    var s%;
    s% := DoGratingDialog%("Left Grating Params", rivLeftGrating$);
    if s% = 1 then
        DlgValue$(rivLeftGratingTextItem%, rivLeftGrating$);
    endif
    return 1;
end


func RivalryRGratingDialog%()
    var s%;
    s% := DoGratingDialog%("Right Grating Params", rivRightGrating$);
    if s% = 1 then
        DlgValue$(rivRightGratingTextItem%, rivRightGrating$);
    endif
    return 1;
end
