' $Id: AttaJoyExtractFunctions.s2s,v 1.1 2010-10-07 23:18:21 devel Exp $

#include "ExtractionUtilities.s2s"
#include "JoystickExtractFunctions.s2s"
#include "../../Spike2Util/FileUtilities.s2s"
#include "../../Spike2Util/LogUtilities.s2s"
#include "../../Spike2Util/BatchUtilities.s2s"
#include "../../Spike2Util/ChannelUtilities.s2s"

var axHOutput := -1;    ' output file handle; if < 0 output is to log window only
var axChan% := -1;
var axIsInitialized% := 0;
var axData%;            ' data window
var axNProcessed% := 0;

const axstateError% := -1;
const axstateStart% := 0;
const axstateFixpt% := 1;
const axstateStim% := 2;
const axstateChange% := 3;
const axstateEndTrial% := 4;
var axIState% := axstateStart%;

var axTFixpt := -1;;
var axTStim := -1;
var axTChange := -1;
var axTEndTrial := -1;
var axTResponse := -1;

const axTTNone% := -1;
const axTTF% := 0;
const axTTG% := 1;
const axCTNone% := -1;
const axCTC% := 0;
const axCTD% := 1;
var axttype% := axTTNone%;
var axctype% := axCTNone%;

const axChanFixpt% := 21;
const axChanStim% := 23;
const axChanChg% := 24;
const axChanEndTrial% := 21;    ' look for falling edge of fixpt

var axBoundaries[4];            ' Joystick boundaries
const axChanJoystick% := 13;    ' shouldn't be const but OK for now

LogInit(1);


axBoundaries[0] := 2.37;
axBoundaries[1] := 2.40753;
axBoundaries[2] := 2.60;
axBoundaries[3] := 2.61;


func AttaX%(h%, args$)
    var n%;
    var sOutfile$;
    var htxt%;
    var tLast := -1;
    var tFound := -1;
    var sFound$;
    var sIgnore$ := "TWwsJRq";
    var tJoy4;
    var r2%, r4%;
    
    ' Initialize joystick functions
    JoystickExtractInit%(axBoundaries[], axChanJoystick%, -1, h%);
    
    ' TODO: Open output file.
    ' Open parameter file
    sOutfile$ := ReplaceFileExtension$(h%, "ajj");
    htxt% := FileOpen(sOutfile$, 8, 1);

    View(h%);
    tFound := NextKeyOrText(tLast, sFound$, sIgnore$);
    while tFound >= 0 and  axIState% <> axstateError% do

        'LogInfo(sFound$ + " " + str$(tFound));
        
        docase 
        case axIState% = axstateStart% then
            docase
            case sFound$ = "F" then
                axttype% := axTTF%;
                if AttaXGetTimeFor%(sFound$, tFound, axTFixpt) <> 0 then
                    axIState% := axstateError%;
                else
                    axIState% := axstateFixpt%;
                    r4% := NextJoystickRegion%(axTFixpt, tJoy4);
                    r2% := WhenInJoystickRegion%(tJoy4, 2, axTResponse);
                    'LogStatus("Joystick", "r4=" + str$(r4%) + " tFixpt=" + str$(axTFixpt) + "-" + str$(tJoy4) + " r2 at " + str$(axTResponse));
                endif
                
            case sFound$ = "G" then
                axttype% := axTTG%;
                if AttaXGetTimeFor%(sFound$, tFound, axTFixpt) <> 0 then
                    axIState% := axstateError%;
                else
                    axIState% := axstateFixpt%;
                    r4% := NextJoystickRegion%(axTFixpt, tJoy4);
                    r2% := WhenInJoystickRegion%(tJoy4, 2, axTResponse);
                    'LogStatus("Joystick", "r4=" + str$(r4%) + " tFixpt=" + str$(axTFixpt) + "-" + str$(tJoy4) + " r2 at " + str$(axTResponse));
                endif
            else
                LogStatus("stateStart", "Unexpected key: " + sFound$ + " at " + str$(tFound));
            endcase
        case axIState% = axstateFixpt% then
            docase
            case sFound$ = "S" then
                if AttaXGetTimeFor%(sFound$, tFound, axTStim) <> 0 then
                    axIState% := axstateError%;
                else
                    axIState% := axstateStim%;
                endif
            case sFound$ = "X" then
                if AttaXGetTimeFor%(sFound$, tFound, axTEndTrial) <> 0 then
                    axIState% := axstateError%;
                else
                    axIState% := axstateEndTrial%;
                endif
            else
                LogStatus("stateFixpt", "Unexpected key: " + sFound$ + " at " + str$(tFound));
            endcase
        case axIState% = axstateStim% then
            docase
            case sFound$ = "C" or sFound$ = "D" then
                if sFound$ = "C" then
                    axctype% := axCTC%;
                else
                    axctype% := axCTD%;
                endif
                
                if AttaXGetTimeFor%(sFound$, tFound, axTChange) <> 0 then
                    axIState% := axstateError%;
                else
                    axIState% := axstateChange%;
                endif
            case sFound$ = "X" then
                if AttaXGetTimeFor%(sFound$, tFound, axTEndTrial) <> 0 then
                    axIState% := axstateError%;
                else
                    axIState% := axstateEndTrial%;
                endif
            else
                LogStatus("stateStim", "Unexpected key: " + sFound$ + " at " + str$(tFound));
            endcase
        case axIState% = axstateChange% then
            docase
            case sFound$ = "X" then
                if AttaXGetTimeFor%(sFound$, tFound, axTEndTrial) <> 0 then
                    axIState% := axstateError%;
                else
                    axIState% := axstateEndTrial%;
                endif
            else
                LogStatus("stateStim", "Unexpected key: " + sFound$ + " at " + str$(tFound));
            endcase                
        else
            LogError("AttaX", "Unknown state " + str$(axIState%));
            return -1;
        endcase
        
        ' Flush trial if end found
        if axIState% = axstateEndTrial% then
            var s$;
            s$ := Print$("%d %f %f %d %f %f %f\n", axttype%, axTFixpt, axTStim, axctype%, axTChange, axTEndTrial, axTResponse);
            'PrintLog(s$);
            ' TODO: Write to file
            if htxt% >= 0 then
                View(htxt%).Print("%s", s$);
            endif
            axttype% := axTTNone%;
            axctype% := axCTNone%;
            axTFixpt := -1;
            axTStim := -1;
            axTChange := -1;
            axTEndTrial := -1;
            axTResponse := -1;
            axIState% := axstateStart%;
        endif
        
        tLast := tFound;    
        tFound := NextKeyOrText(tLast, sFound$, sIgnore$);
    wend
    
    ' TODO: close output file
    
    return 0;
end

                
func AttaXGetTimeFor%(s$, tFound, &tResult)
    var status% := 0;
    docase
    case s$ = "F" or s$ = "G" then
        
        status% := FindRisingEdge%(axChanFixpt%, tFound, tResult);
        if status% <> 0 then
            LogError("AttaXGetTimeFor", "Fixpt edge not found. F/G at " + str$(tFound));
            return -1;
        endif
        
    case s$ = "S" then
        
        status% := FindRisingEdge%(axChanStim%, tFound, tResult);
        if status% <> 0 then
            LogError("AttaXGetTimeFor", "Stim edge not found. S at " + str$(tFound));
            return -1;
        endif
        
    case s$ = "C" or s$ = "D" then
        
        status% := FindRisingEdge%(axChanChg%, tFound, tResult);
        if status% <> 0 then
            LogError("AttaXGetTimeFor", "Chg edge not found. C at " + str$(tFound));
            return -1;
        endif
        
    case s$ = "X" then
        
        status% := FindFallingEdge%(axChanFixpt%, tFound, tResult);
        if status% <> 1 then
            LogError("AttaXGetTimeFor", "Fixpt falling edge not found. X at " + str$(tFound));
            return -1;
        endif
        
    else
        
        LogError("AttaXGetTimeFor", "Don't know how to get time for \"" + s$ + "\" at " + str$(tFound));
        return -1;
        
    endcase
    
    return 0;
end
