' $Id: StartSlaveFixstim.s2s,v 1.2 2017/04/11 23:06:06 devel Exp $

const slvCVSID$ := "$Id: StartSlaveFixstim.s2s,v 1.2 2017/04/11 23:06:06 devel Exp $";

#include "../../Spike2Util/UsreyUtil.s2s"
#include "UsreyDAQ.s2s"
#include "../../Spike2Util/LogUtilities.s2s"


var cmd$; 
var h%;

if GetUseRemoteStimulus%() = 1 then
    cmd$ := "cmd /c " + GetBinDir$(1) + "fixstim.exe -b gray -d " + GetDistanceToScreenMM$() + " -u " + GetRemoteStimulusIP$() + ":" + GetRemoteStimulusPort$();
    LogStatus("StartSlaveFixstim", cmd$);
    h% := ProgRun(cmd$, 1);
else
    LogStatus("StartSlaveFixstim", "This rig is not configured to use remote stimulus.");
endif
