''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
'	Fixation Point parameters START
'
'	These vars and funcs control the parameters for the fixation point stored in the registry. 
'
''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''

#include "../../Spike2Util/RigName.s2s"
#include "../../Spike2util/UsreyUtil.s2s"


var WindowRadius;
var FixationX, FixationY;
var FixationColor$;
var iFixationColor%;
var FixationDiameter;
var FixationColorList$[3]; 
var FixationArg$;


GetFixationPointParameters();


func GetFixationArg$()
    return FixationArg$;
end

proc GetFixationPointParameterValues(&x, &y, &d, &wr)
    x := FixationX;
    y := FixationY;
    d := FixationDiameter;
    wr := WindowRadius;
    return;
end


proc GetFixationPointParameters()
	var stmp$;
	var key$;
	key$ := GetRigName$() + "\\" + GetCurrentConfiguration$() + "\\FixationPoint";
	Profile(key$, "WindowRadius", "1", stmp$);
	WindowRadius := val(stmp$);

	Profile(key$, "FixationX", "0", stmp$);
	FixationX := val(stmp$);
	Profile(key$, "FixationY", "0", stmp$);
	FixationY := val(stmp$);
	Profile(key$, "FixationColor", "0", stmp$);
	iFixationColor% := val(stmp$);

	FixationColorList$[0]:="red"; 
	FixationColorList$[1]:="green"; 
	FixationColorList$[2]:="blue"; 
	FixationColor$ := FixationColorList$[iFixationColor%];

	Profile(key$, "FixationDiameter", "0.5", stmp$);
	FixationDiameter := val(stmp$);

	' Form the argument for applications. Convenience for passing args. 
	FixationArg$ := " -f " + str$(FixationX) + "," + str$(FixationY) + "," + str$(FixationDiameter) + "," + FixationColor$;
end;

proc SaveFixationPointParameters()
	var key$;
	key$ := GetRigName$() + "\\" + GetCurrentConfiguration$() + "\\FixationPoint";
	Profile(key$, "WindowRadius", str$(WindowRadius));
	Profile(key$, "FixationX", str$(FixationX));
	Profile(key$, "FixationY", str$(FixationY));
	Profile(key$, "FixationColor", str$(iFixationColor%));
	Profile(key$, "FixationDiameter", str$(FixationDiameter));
end;


func FixationPointDialog%()

	var i%;
	GetFixationPointParameters();
	DlgCreate("Fixation parameters: " + GetCurrentConfiguration$(), 25, 10);
	DlgReal(1, "Fixation X:", -20, 20);
	DlgReal(2, "Fixation Y:", -20, 20);
	DlgReal(3, "Fixation diam:", .1, 5);
	DlgReal(4, "Window radius:", .1, 30);
	DlgList(5, "Color:", FixationColorList$[]);
	i% := DlgShow(FixationX, FixationY, FixationDiameter, WindowRadius, iFixationColor%);	

	' If user cancelled, reload params
	if i% = 0 then
		GetFixationPointParameters();
	else
		SaveFixationPointParameters();
	endif

	return 1;
end;


''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
'	Fixation Point parameters END
'
''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
